<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindBehaviorWaterTuner.Session;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:AindBehaviorWaterTuner.Rig;assembly=Extensions"
                 xmlns:p3="clr-namespace:AindBehaviorWaterTuner.TaskLogic;assembly=Extensions"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.VersionControl;assembly=AllenNeuralDynamics.VersionControl"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p5="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p6="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p7="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:p8="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p9="clr-namespace:AllenNeuralDynamics.AindManipulator;assembly=AllenNeuralDynamics.AindManipulator"
                 xmlns:p10="clr-namespace:AindBehaviorWaterTuner.DataTypes;assembly=Extensions"
                 xmlns:p11="clr-namespace:;assembly=Extensions"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:zg="clr-namespace:Bonsai.Gui.ZedGraph;assembly=Bonsai.Gui.ZedGraph"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath />
        <RigPath />
        <SessionPath />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorSessionModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p2:DeserializeFromJson">
              <p2:Type xsi:type="TypeMapping" TypeArguments="p2:AindBehaviorWaterTunerRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p3:DeserializeFromJson">
              <p3:Type xsi:type="TypeMapping" TypeArguments="p3:AindBehaviorWaterTunerTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p4:CreateRepository">
                <p4:Path>../.</p4:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Repository</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RootFolder" Selector="RootPath" />
                <Property Name="SessionName" Selector="SessionName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai">
              <RootFolder />
              <SessionName xsi:nil="true" />
              <SubjectName>LoggingRootPath</SubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RngSeed</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p5:CreateContinuousUniform">
                <p5:Lower>0</p5:Lower>
                <p5:Upper>10</p5:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p5:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>CheckNull</scr:Name>
              <scr:Expression>Item1.HasValue ? Item1.Value : Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeedValue</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Seed" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeed</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p6:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>Annotations</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p6:Unit">
              <rx:Name>StartLogging</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p7:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p6:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Double">
              <rx:Name>CurrentDelay</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ExperimentState</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="35" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="35" Label="Source2" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source3" />
            <Edge From="35" To="36" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Scale</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\ScaleControl.bonsai">
              <PortName>COM30</PortName>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>PinOut</Name>
              <Text><![CDATA[| Function | HarpBehavior Pin | Notes |
| --- | ----------- | ----------- |
| Camera Trigger | DO0 |  |
| Water Valve | Port0 Supply |  Use a poke breakout |
| Lickometer | Port0 DI |  Use a poke breakout |
| Encoder B | Port2 DIO | Use a poke breakout |
| Encoder A | Port2 DI | Use a poke breakout |
| Thermistor | ADC0 |  |
| Pressure Sensor | ADC1 |  |
| Photodiode | DI3 |  |
| Servo Motor | DO2 |  |
| Audio Buzzer | DO1 |  |

]]></Text>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpBehaviorDevice.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpClockGenerator.PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpTimestampGeneratorGen3Device.bonsai">
              <PortName>COMx</PortName>
              <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>HardwareChecks</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ProtocolValidation</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Repository</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p4:IsRepositoryClean">
                            <p4:IgnoreUntracked>false</p4:IgnoreUntracked>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SubjectSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>AllowDirtyRepo</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>AllowDirty?</scr:Name>
                          <scr:Expression>Item2 ? False : Item1</scr:Expression>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p8:ThrowException">
                            <p8:Message>Repository is not clean! Please discard all local changes.</p8:Message>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\ValidateClkOutput.bonsai" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="5" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SubjectSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>SkipHardwareValidation</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DelaySubscription">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>WaterValve</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Double">
                    <rx:Name>ValveOpenTimeMs</rx:Name>
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:PulseSupplyPort0" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p6:Unit">
                    <rx:Name>TriggerValve</rx:Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                      <beh:OutputSet>SupplyPort0</beh:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                    <rx:Name>ValveFlushState</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>Flush</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>200</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>ValveOpenTimeMs</Name>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>TriggerValve</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.2S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:RepeatCount">
                            <rx:Count>50</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:LastOrDefault" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Switch" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StartLogging</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ValveFlushState</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="14" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Manipulator</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Calibration</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Input</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:SerializeToJson" />
            </Expression>
            <Expression xsi:type="p9:DeserializeFromJson">
              <p9:Type xsi:type="TypeMapping" TypeArguments="p9:AindManipulatorCalibrationInput" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Manipulator</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\AindManipulator.bonsai">
              <PortName>COMx</PortName>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="23" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TaskLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GetVolumes</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ValveOpenTime</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>Calibrate</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisDelay</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentDelay</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisDelay</Name>
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ValveOpenTimeMs</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\GetStableMeasurement.bonsai">
                    <BufferSize>10</BufferSize>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>BaselineWeight</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BaselineWeight</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>LoopValves</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TaskLogicParameters</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>ValveOpenInterval</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p8:TimeSpanFromSeconds" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0.5S</rx:DueTime>
                            <rx:Period>PT0S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>TriggerValve</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TaskLogicParameters</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RepeatCount</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Count" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:RepeatCount">
                            <rx:Count>200</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Last" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="10" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\GetStableMeasurement.bonsai">
                    <BufferSize>10</BufferSize>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>WaterWeight</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WaterWeight</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DataFrame.Weight</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BaselineWeight</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DataFrame.Weight</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Subtract" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToList" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="WaterWeight" Selector="it" />
                    </PropertyMappings>
                    <Selector />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RepeatCount</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="RepeatCount" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ValveOpenInterval</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ValveOpenInterval" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisDelay</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ValveOpenTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p10:Measurement">
                      <p10:ValveOpenInterval>0</p10:ValveOpenInterval>
                      <p10:ValveOpenTime>0</p10:ValveOpenTime>
                      <p10:RepeatCount>0</p10:RepeatCount>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="19" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="32" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="32" Label="Source2" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="32" Label="Source3" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source4" />
                  <Edge From="32" To="33" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Measurement</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Measurement</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p11:WaterCalibrationModel" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CalibrationModel</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CalibrationModel</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p8:CreateSoftwareEvent">
                <p8:EventName>CalibrationModel</p8:EventName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoftwareEvent</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Logging.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DataVisualization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Label</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Waiting to start...</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentDelay</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ValveOpenTime.Count</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>Calibrating delay {0} ({1} / {2})</Format>
                    <Selector>Item1.Item2,Item1.Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Text" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>Ongoing</gui:Name>
                    <gui:Enabled>false</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Font>Microsoft Sans Serif, 15.75pt</gui:Font>
                    <gui:Text>Calibrating delay 0.05 (3 / 1)</gui:Text>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="10" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>WeightMeasurement</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HasDataFrame</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DataFrame</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>MeasurementPlot</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Measurement</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ValveOpenTime</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>WaterWeight</Selector>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>Average</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Average" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Item1 as ValveOpenTime,
Item2 as Weight)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="zg:LineGraphBuilder">
                    <zg:ValueSelector>ValveOpenTime,Weight</zg:ValueSelector>
                    <zg:SymbolType>Square</zg:SymbolType>
                    <zg:LineWidth>1</zg:LineWidth>
                    <zg:CurveSettings>
                      <zg:CurveConfiguration>
                        <zg:Label>Measurements</zg:Label>
                        <zg:Color>#0000C0</zg:Color>
                      </zg:CurveConfiguration>
                    </zg:CurveSettings>
                    <zg:Capacity>1000</zg:Capacity>
                    <zg:XMin xsi:nil="true" />
                    <zg:XMax xsi:nil="true" />
                    <zg:YMin xsi:nil="true" />
                    <zg:YMax xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WeightMeasurement</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DataFrame.Weight</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(it.Value as Weight, it.Timestamp as Timestamp)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="zg:RollingGraphBuilder">
                    <zg:IndexSelector>Timestamp</zg:IndexSelector>
                    <zg:ValueSelector>Weight</zg:ValueSelector>
                    <zg:SymbolType>None</zg:SymbolType>
                    <zg:LineWidth>1</zg:LineWidth>
                    <zg:CurveSettings />
                    <zg:Capacity>100</zg:Capacity>
                    <zg:Min xsi:nil="true" />
                    <zg:Max xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>OnlinePlots</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>2</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="14" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>3</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>0.15</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>0.15</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>0.7</gui:Height>
                </gui:RowStyle>
              </gui:RowStyles>
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping">
        <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\LauncherControl.bonsai" />
      <Expression xsi:type="VisualizerMapping">
        <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.AindManipulator:AindManipulatorGui.bonsai" />
      <Expression xsi:type="VisualizerMapping">
        <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
      </Expression>
      <Expression xsi:type="gui:TabControlBuilder">
        <gui:Name>OperationControl</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
      </Expression>
      <Expression xsi:type="VisualizerMapping">
        <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TabControlVisualizer" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HardwareShortcuts</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ValveFlushState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>MakeLabel</scr:Name>
              <scr:Expression>it ? "Close Valves" : "Open Valves"</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ExperimentState</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Enabled" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:ToggleButtonBuilder">
              <gui:Name>FlushValves</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Open Valves</gui:Text>
              <gui:Checked>false</gui:Checked>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ValveFlushState</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping">
              <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ToggleButtonVisualizer" />
            </Expression>
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>HwShortcuts</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>4</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping">
        <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
      </Expression>
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Name>UserInterface</gui:Name>
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:ColumnCount>3</gui:ColumnCount>
        <gui:RowCount>1</gui:RowCount>
        <gui:ColumnStyles>
          <gui:ColumnStyle>
            <gui:SizeType>Percent</gui:SizeType>
            <gui:Width>0.45</gui:Width>
          </gui:ColumnStyle>
          <gui:ColumnStyle>
            <gui:SizeType>Percent</gui:SizeType>
            <gui:Width>0.45</gui:Width>
          </gui:ColumnStyle>
          <gui:ColumnStyle>
            <gui:SizeType>Percent</gui:SizeType>
            <gui:Width>0.1</gui:Width>
          </gui:ColumnStyle>
        </gui:ColumnStyles>
        <gui:RowStyles />
        <gui:CellSpans />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CalibrationModel</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="22" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="22" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source3" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>